#this is a helper file composed of only volumetric sources over each of the XCAT phantom materials/tissues

# defines two step functions, one for active materials and one for number of histories
# crucial for proper formatting of tuple outputs
s:Tf/ActiveMaterial/Function = "Step"
dv:Tf/ActiveMaterial/Times = 2 10 20  ms
sv:Tf/ActiveMaterial/Values = 2 "XCAT_white_matter_act" "XCAT_grey_matter_act" 

s:Tf/NumHistories/Function = "Step"
dv:Tf/NumHistories/Times = 2 10 20  ms
iv:Tf/NumHistories/Values = 2 30627234 50847142 

s:So/VaryingSource/Type            = "Volumetric"
s:So/VaryingSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/VaryingSource/ActiveMaterial = Tf/ActiveMaterial/Value			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/VaryingSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/VaryingSource/NumberOfHistoriesInRun = Tf/NumHistories/Value				# the number of particles that will be randomly distributed throughout the active material
b:So/VaryingSource/RecursivelyIncludeChildren = "True"			
ic:So/VaryingSource/MaxNumberOfPointsToSample = 1000000000			#1e9 points	

s:So/VaryingSource/BeamEnergySpectrumType          = "Continuous"
dv:So/VaryingSource/BeamEnergySpectrumValues       = 635 1 2 3 4 5 6 7 8 9 10 11 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635  keV

uv:So/VaryingSource/BeamEnergySpectrumWeights      = 635 2.375984752039547e-06 6.663199616029541e-06 1.2152122697201515e-05 1.8585328904808786e-05 2.5812012109402232e-05 3.3729128233884464e-05 4.226011911883599e-05 5.134498503094103e-05 6.093492188074694e-05 7.098912832574647e-05 8.147276702737386e-05 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0.0  		# defines the percentages of the particles at the respective energy value