#this is a helper file composed of only volumetric sources over each of the XCAT phantom materials/tissues

#defines a volumetric source over the Patient geometry
s:So/XCAT_yellow_bone_marrow_activitySource/Type            = "Volumetric"
s:So/XCAT_yellow_bone_marrow_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_yellow_bone_marrow_activitySource/ActiveMaterial = "XCAT_yellow_bone_marrow_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_yellow_bone_marrow_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_yellow_bone_marrow_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_yellow_bone_marrow_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_yellow_bone_marrow_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_yellow_bone_marrow_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_yellow_bone_marrow_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_yellow_bone_marrow_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_myoLV_actSource/Type            = "Volumetric"
s:So/XCAT_myoLV_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_myoLV_actSource/ActiveMaterial = "XCAT_myoLV_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_myoLV_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_myoLV_actSource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_myoLV_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_myoLV_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_myoLV_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_myoLV_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_myoLV_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_myoRA_actSource/Type            = "Volumetric"
s:So/XCAT_myoRA_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_myoRA_actSource/ActiveMaterial = "XCAT_myoRA_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_myoRA_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_myoRA_actSource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_myoRA_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_myoRA_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_myoRA_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_myoRA_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_myoRA_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_bldplLV_actSource/Type            = "Volumetric"
s:So/XCAT_bldplLV_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_bldplLV_actSource/ActiveMaterial = "XCAT_bldplLV_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_bldplLV_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_bldplLV_actSource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_bldplLV_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_bldplLV_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_bldplLV_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_bldplLV_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_bldplLV_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_bldplRV_actSource/Type            = "Volumetric"
s:So/XCAT_bldplRV_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_bldplRV_actSource/ActiveMaterial = "XCAT_bldplRV_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_bldplRV_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_bldplRV_actSource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_bldplRV_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_bldplRV_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_bldplRV_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_bldplRV_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_bldplRV_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_bldplLA_actSource/Type            = "Volumetric"
s:So/XCAT_bldplLA_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_bldplLA_actSource/ActiveMaterial = "XCAT_bldplLA_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_bldplLA_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_bldplLA_actSource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_bldplLA_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_bldplLA_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_bldplLA_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_bldplLA_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_bldplLA_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_bldplRA_actSource/Type            = "Volumetric"
s:So/XCAT_bldplRA_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_bldplRA_actSource/ActiveMaterial = "XCAT_bldplRA_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_bldplRA_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_bldplRA_actSource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_bldplRA_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_bldplRA_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_bldplRA_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_bldplRA_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_bldplRA_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_coronary_art_activitySource/Type            = "Volumetric"
s:So/XCAT_coronary_art_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_coronary_art_activitySource/ActiveMaterial = "XCAT_coronary_art_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_coronary_art_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_coronary_art_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_coronary_art_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_coronary_art_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_coronary_art_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_coronary_art_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_coronary_art_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_body_activitySource/Type            = "Volumetric"
s:So/XCAT_body_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_body_activitySource/ActiveMaterial = "XCAT_body_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_body_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_body_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_body_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_body_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_body_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_body_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_body_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_skin_activitySource/Type            = "Volumetric"
s:So/XCAT_skin_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_skin_activitySource/ActiveMaterial = "XCAT_skin_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_skin_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_skin_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_skin_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_skin_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_skin_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_skin_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_skin_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_muscle_activitySource/Type            = "Volumetric"
s:So/XCAT_muscle_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_muscle_activitySource/ActiveMaterial = "XCAT_muscle_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_muscle_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_muscle_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_muscle_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_muscle_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_muscle_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_muscle_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_muscle_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_brain_activitySource/Type            = "Volumetric"
s:So/XCAT_brain_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_brain_activitySource/ActiveMaterial = "XCAT_brain_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_brain_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_brain_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_brain_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_brain_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_brain_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_brain_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_brain_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_sinus_activitySource/Type            = "Volumetric"
s:So/XCAT_sinus_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_sinus_activitySource/ActiveMaterial = "XCAT_sinus_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_sinus_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_sinus_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_sinus_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_sinus_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_sinus_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_sinus_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_sinus_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_liver_activitySource/Type            = "Volumetric"
s:So/XCAT_liver_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_liver_activitySource/ActiveMaterial = "XCAT_liver_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_liver_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_liver_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_liver_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_liver_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_liver_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_liver_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_liver_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_gall_bladder_activitySource/Type            = "Volumetric"
s:So/XCAT_gall_bladder_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_gall_bladder_activitySource/ActiveMaterial = "XCAT_gall_bladder_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_gall_bladder_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_gall_bladder_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_gall_bladder_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_gall_bladder_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_gall_bladder_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_gall_bladder_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_gall_bladder_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_right_lung_activitySource/Type            = "Volumetric"
s:So/XCAT_right_lung_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_right_lung_activitySource/ActiveMaterial = "XCAT_right_lung_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_right_lung_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_right_lung_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_right_lung_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_right_lung_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_right_lung_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_right_lung_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_right_lung_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_left_lung_activitySource/Type            = "Volumetric"
s:So/XCAT_left_lung_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_left_lung_activitySource/ActiveMaterial = "XCAT_left_lung_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_left_lung_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_left_lung_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_left_lung_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_left_lung_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_left_lung_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_left_lung_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_left_lung_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_esophagus_activitySource/Type            = "Volumetric"
s:So/XCAT_esophagus_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_esophagus_activitySource/ActiveMaterial = "XCAT_esophagus_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_esophagus_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_esophagus_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_esophagus_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_esophagus_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_esophagus_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_esophagus_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_esophagus_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_esophagus_contents_activitySource/Type            = "Volumetric"
s:So/XCAT_esophagus_contents_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_esophagus_contents_activitySource/ActiveMaterial = "XCAT_esophagus_contents_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_esophagus_contents_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_esophagus_contents_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_esophagus_contents_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_esophagus_contents_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_esophagus_contents_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_esophagus_contents_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_esophagus_contents_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_laryngopharynx_activitySource/Type            = "Volumetric"
s:So/XCAT_laryngopharynx_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_laryngopharynx_activitySource/ActiveMaterial = "XCAT_laryngopharynx_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_laryngopharynx_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_laryngopharynx_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_laryngopharynx_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_laryngopharynx_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_laryngopharynx_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_laryngopharynx_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_laryngopharynx_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_larynx_activitySource/Type            = "Volumetric"
s:So/XCAT_larynx_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_larynx_activitySource/ActiveMaterial = "XCAT_larynx_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_larynx_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_larynx_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_larynx_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_larynx_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_larynx_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_larynx_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_larynx_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_st_wall_activitySource/Type            = "Volumetric"
s:So/XCAT_st_wall_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_st_wall_activitySource/ActiveMaterial = "XCAT_st_wall_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_st_wall_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_st_wall_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_st_wall_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_st_wall_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_st_wall_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_st_wall_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_st_wall_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_st_cnts_activitySource/Type            = "Volumetric"
s:So/XCAT_st_cnts_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_st_cnts_activitySource/ActiveMaterial = "XCAT_st_cnts_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_st_cnts_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_st_cnts_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_st_cnts_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_st_cnts_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_st_cnts_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_st_cnts_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_st_cnts_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_pancreas_activitySource/Type            = "Volumetric"
s:So/XCAT_pancreas_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_pancreas_activitySource/ActiveMaterial = "XCAT_pancreas_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_pancreas_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_pancreas_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_pancreas_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_pancreas_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_pancreas_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_pancreas_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_pancreas_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_right_kidney_cortex_activitySource/Type            = "Volumetric"
s:So/XCAT_right_kidney_cortex_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_right_kidney_cortex_activitySource/ActiveMaterial = "XCAT_right_kidney_cortex_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_right_kidney_cortex_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_right_kidney_cortex_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_right_kidney_cortex_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_right_kidney_cortex_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_right_kidney_cortex_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_right_kidney_cortex_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_right_kidney_cortex_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_right_kidney_medulla_activitySource/Type            = "Volumetric"
s:So/XCAT_right_kidney_medulla_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_right_kidney_medulla_activitySource/ActiveMaterial = "XCAT_right_kidney_medulla_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_right_kidney_medulla_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_right_kidney_medulla_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_right_kidney_medulla_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_right_kidney_medulla_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_right_kidney_medulla_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_right_kidney_medulla_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_right_kidney_medulla_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_left_kidney_cortex_activitySource/Type            = "Volumetric"
s:So/XCAT_left_kidney_cortex_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_left_kidney_cortex_activitySource/ActiveMaterial = "XCAT_left_kidney_cortex_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_left_kidney_cortex_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_left_kidney_cortex_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_left_kidney_cortex_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_left_kidney_cortex_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_left_kidney_cortex_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_left_kidney_cortex_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_left_kidney_cortex_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_left_kidney_medulla_activitySource/Type            = "Volumetric"
s:So/XCAT_left_kidney_medulla_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_left_kidney_medulla_activitySource/ActiveMaterial = "XCAT_left_kidney_medulla_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_left_kidney_medulla_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_left_kidney_medulla_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_left_kidney_medulla_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_left_kidney_medulla_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_left_kidney_medulla_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_left_kidney_medulla_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_left_kidney_medulla_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_spleen_activitySource/Type            = "Volumetric"
s:So/XCAT_spleen_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_spleen_activitySource/ActiveMaterial = "XCAT_spleen_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_spleen_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_spleen_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_spleen_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_spleen_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_spleen_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_spleen_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_spleen_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_rib_activitySource/Type            = "Volumetric"
s:So/XCAT_rib_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_rib_activitySource/ActiveMaterial = "XCAT_rib_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_rib_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_rib_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_rib_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_rib_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_rib_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_rib_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_rib_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_cortical_bone_activitySource/Type            = "Volumetric"
s:So/XCAT_cortical_bone_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_cortical_bone_activitySource/ActiveMaterial = "XCAT_cortical_bone_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_cortical_bone_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_cortical_bone_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_cortical_bone_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_cortical_bone_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_cortical_bone_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_cortical_bone_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_cortical_bone_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_spine_activitySource/Type            = "Volumetric"
s:So/XCAT_spine_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_spine_activitySource/ActiveMaterial = "XCAT_spine_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_spine_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_spine_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_spine_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_spine_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_spine_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_spine_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_spine_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_spinal_cord_activitySource/Type            = "Volumetric"
s:So/XCAT_spinal_cord_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_spinal_cord_activitySource/ActiveMaterial = "XCAT_spinal_cord_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_spinal_cord_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_spinal_cord_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_spinal_cord_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_spinal_cord_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_spinal_cord_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_spinal_cord_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_spinal_cord_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_bone_marrow_activitySource/Type            = "Volumetric"
s:So/XCAT_bone_marrow_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_bone_marrow_activitySource/ActiveMaterial = "XCAT_bone_marrow_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_bone_marrow_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_bone_marrow_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_bone_marrow_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_bone_marrow_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_bone_marrow_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_bone_marrow_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_bone_marrow_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_art_activitySource/Type            = "Volumetric"
s:So/XCAT_art_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_art_activitySource/ActiveMaterial = "XCAT_art_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_art_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_art_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_art_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_art_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_art_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_art_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_art_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_vein_activitySource/Type            = "Volumetric"
s:So/XCAT_vein_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_vein_activitySource/ActiveMaterial = "XCAT_vein_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_vein_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_vein_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_vein_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_vein_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_vein_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_vein_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_vein_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_bladder_activitySource/Type            = "Volumetric"
s:So/XCAT_bladder_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_bladder_activitySource/ActiveMaterial = "XCAT_bladder_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_bladder_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_bladder_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_bladder_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_bladder_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_bladder_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_bladder_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_bladder_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_prostate_activitySource/Type            = "Volumetric"
s:So/XCAT_prostate_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_prostate_activitySource/ActiveMaterial = "XCAT_prostate_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_prostate_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_prostate_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_prostate_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_prostate_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_prostate_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_prostate_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_prostate_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_asc_large_intest_activitySource/Type            = "Volumetric"
s:So/XCAT_asc_large_intest_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_asc_large_intest_activitySource/ActiveMaterial = "XCAT_asc_large_intest_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_asc_large_intest_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_asc_large_intest_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_asc_large_intest_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_asc_large_intest_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_asc_large_intest_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_asc_large_intest_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_asc_large_intest_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_trans_large_intest_activitySource/Type            = "Volumetric"
s:So/XCAT_trans_large_intest_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_trans_large_intest_activitySource/ActiveMaterial = "XCAT_trans_large_intest_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_trans_large_intest_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_trans_large_intest_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_trans_large_intest_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_trans_large_intest_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_trans_large_intest_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_trans_large_intest_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_trans_large_intest_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_desc_large_intest_activitySource/Type            = "Volumetric"
s:So/XCAT_desc_large_intest_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_desc_large_intest_activitySource/ActiveMaterial = "XCAT_desc_large_intest_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_desc_large_intest_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_desc_large_intest_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_desc_large_intest_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_desc_large_intest_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_desc_large_intest_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_desc_large_intest_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_desc_large_intest_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_small_intest_activitySource/Type            = "Volumetric"
s:So/XCAT_small_intest_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_small_intest_activitySource/ActiveMaterial = "XCAT_small_intest_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_small_intest_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_small_intest_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_small_intest_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_small_intest_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_small_intest_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_small_intest_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_small_intest_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_rectum_activitySource/Type            = "Volumetric"
s:So/XCAT_rectum_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_rectum_activitySource/ActiveMaterial = "XCAT_rectum_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_rectum_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_rectum_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_rectum_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_rectum_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_rectum_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_rectum_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_rectum_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_sem_activitySource/Type            = "Volumetric"
s:So/XCAT_sem_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_sem_activitySource/ActiveMaterial = "XCAT_sem_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_sem_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_sem_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_sem_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_sem_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_sem_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_sem_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_sem_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_vas_def_activitySource/Type            = "Volumetric"
s:So/XCAT_vas_def_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_vas_def_activitySource/ActiveMaterial = "XCAT_vas_def_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_vas_def_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_vas_def_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_vas_def_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_vas_def_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_vas_def_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_vas_def_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_vas_def_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_test_activitySource/Type            = "Volumetric"
s:So/XCAT_test_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_test_activitySource/ActiveMaterial = "XCAT_test_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_test_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_test_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_test_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_test_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_test_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_test_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_test_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_penis_activitySource/Type            = "Volumetric"
s:So/XCAT_penis_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_penis_activitySource/ActiveMaterial = "XCAT_penis_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_penis_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_penis_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_penis_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_penis_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_penis_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_penis_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_penis_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_epididymus_activitySource/Type            = "Volumetric"
s:So/XCAT_epididymus_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_epididymus_activitySource/ActiveMaterial = "XCAT_epididymus_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_epididymus_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_epididymus_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_epididymus_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_epididymus_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_epididymus_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_epididymus_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_epididymus_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_pericardium_activitySource/Type            = "Volumetric"
s:So/XCAT_pericardium_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_pericardium_activitySource/ActiveMaterial = "XCAT_pericardium_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_pericardium_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_pericardium_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_pericardium_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_pericardium_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_pericardium_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_pericardium_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_pericardium_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_cartilage_activitySource/Type            = "Volumetric"
s:So/XCAT_cartilage_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_cartilage_activitySource/ActiveMaterial = "XCAT_cartilage_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_cartilage_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_cartilage_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_cartilage_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_cartilage_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_cartilage_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_cartilage_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_cartilage_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_intest_air_activitySource/Type            = "Volumetric"
s:So/XCAT_intest_air_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_intest_air_activitySource/ActiveMaterial = "XCAT_intest_air_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_intest_air_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_intest_air_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_intest_air_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_intest_air_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_intest_air_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_intest_air_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_intest_air_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_urethra_activitySource/Type            = "Volumetric"
s:So/XCAT_urethra_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_urethra_activitySource/ActiveMaterial = "XCAT_urethra_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_urethra_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_urethra_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_urethra_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_urethra_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_urethra_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_urethra_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_urethra_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_thyroid_activitySource/Type            = "Volumetric"
s:So/XCAT_thyroid_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_thyroid_activitySource/ActiveMaterial = "XCAT_thyroid_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_thyroid_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_thyroid_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_thyroid_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_thyroid_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_thyroid_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_thyroid_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_thyroid_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_salivary_activitySource/Type            = "Volumetric"
s:So/XCAT_salivary_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_salivary_activitySource/ActiveMaterial = "XCAT_salivary_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_salivary_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_salivary_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_salivary_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_salivary_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_salivary_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_salivary_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_salivary_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_eye_activitySource/Type            = "Volumetric"
s:So/XCAT_eye_activitySource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_eye_activitySource/ActiveMaterial = "XCAT_eye_activity"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_eye_activitySource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_eye_activitySource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_eye_activitySource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_eye_activitySource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_eye_activitySource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_eye_activitySource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_eye_activitySource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_Corpus_Callosum_actSource/Type            = "Volumetric"
s:So/XCAT_Corpus_Callosum_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_Corpus_Callosum_actSource/ActiveMaterial = "XCAT_Corpus_Callosum_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_Corpus_Callosum_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_Corpus_Callosum_actSource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_Corpus_Callosum_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_Corpus_Callosum_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_Corpus_Callosum_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_Corpus_Callosum_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_Corpus_Callosum_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_Putamen_actSource/Type            = "Volumetric"
s:So/XCAT_Putamen_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_Putamen_actSource/ActiveMaterial = "XCAT_Putamen_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_Putamen_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_Putamen_actSource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_Putamen_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_Putamen_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_Putamen_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_Putamen_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_Putamen_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_Thalamus_actSource/Type            = "Volumetric"
s:So/XCAT_Thalamus_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_Thalamus_actSource/ActiveMaterial = "XCAT_Thalamus_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_Thalamus_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_Thalamus_actSource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_Thalamus_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_Thalamus_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_Thalamus_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_Thalamus_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_Thalamus_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_Periacquaductal_grey_actSource/Type            = "Volumetric"
s:So/XCAT_Periacquaductal_grey_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_Periacquaductal_grey_actSource/ActiveMaterial = "XCAT_Periacquaductal_grey_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_Periacquaductal_grey_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_Periacquaductal_grey_actSource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_Periacquaductal_grey_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_Periacquaductal_grey_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_Periacquaductal_grey_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_Periacquaductal_grey_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_Periacquaductal_grey_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_Middle_cerebellar_peduncle_actSource/Type            = "Volumetric"
s:So/XCAT_Middle_cerebellar_peduncle_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_Middle_cerebellar_peduncle_actSource/ActiveMaterial = "XCAT_Middle_cerebellar_peduncle_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_Middle_cerebellar_peduncle_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_Middle_cerebellar_peduncle_actSource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_Middle_cerebellar_peduncle_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_Middle_cerebellar_peduncle_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_Middle_cerebellar_peduncle_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_Middle_cerebellar_peduncle_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_Middle_cerebellar_peduncle_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_cerebellum_actSource/Type            = "Volumetric"
s:So/XCAT_cerebellum_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_cerebellum_actSource/ActiveMaterial = "XCAT_cerebellum_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_cerebellum_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_cerebellum_actSource/NumberOfHistoriesInRun = 0				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_cerebellum_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_cerebellum_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_cerebellum_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_cerebellum_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_cerebellum_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_white_matter_actSource/Type            = "Volumetric"
s:So/XCAT_white_matter_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_white_matter_actSource/ActiveMaterial = "XCAT_white_matter_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_white_matter_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_white_matter_actSource/NumberOfHistoriesInRun = 10				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_white_matter_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_white_matter_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_white_matter_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_white_matter_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_white_matter_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

#defines a volumetric source over the Patient geometry
s:So/XCAT_grey_matter_actSource/Type            = "Volumetric"
s:So/XCAT_grey_matter_actSource/Component       = "Patient"				# specifies that the source is defined for the Patient geometry
sc:So/XCAT_grey_matter_actSource/ActiveMaterial = "XCAT_grey_matter_act"			# specifies which material within the Patient geometry is active i.e. contain radionuclides
s:So/XCAT_grey_matter_actSource/BeamParticle    = "e+"					# tells which particle will be distributed throughout the active material
ic:So/XCAT_grey_matter_actSource/NumberOfHistoriesInRun = 81				# the number of particles that will be randomly distributed throughout the active material
b:So/XCAT_grey_matter_actSource/RecursivelyIncludeChildren = "True"			
ic:So/XCAT_grey_matter_actSource/MaxNumberOfPointsToSample = 10000			

#defines the energy spectrum of the particles in the source
s:So/XCAT_grey_matter_actSource/BeamEnergySpectrumType          = "Discrete"
dv:So/XCAT_grey_matter_actSource/BeamEnergySpectrumValues       = 1 0 MeV		# currently set to 0 MeV so all the particles are at rest to begin
uv:So/XCAT_grey_matter_actSource/BeamEnergySpectrumWeights      = 1 1.0		# defines the percentages of the particles at the respective energy value

